<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="0.1" FeatureVersion="1.0" Originator="com.madisoft" Category="reader"
        xmlns="http://www.sila-standard.org"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
        xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_features/raw/master/schema/FeatureDefinition.xsd">
    <Identifier>AbsorbanceReaderService</Identifier>
    <DisplayName>Absorbance Reader Service</DisplayName>
    <Description>SiLA 2 Device Absorbance Reader feature - Show basic operations for a device absorbance reader
        like reading from selected well of a plate and reading from all wells in a plate.
        There are several types of plates with 6, 12, 24, 48, 96 and 384 wells. Observing current status of the reader: idle, busy, unavailable.
        Absorbance reading has a measurement property.
    </Description>
    <!-- Commands -->
    <Command>
        <Identifier>AbsorbanceReadWell</Identifier>
        <DisplayName>Absorbance Read Well</DisplayName>
        <Description>Read and present data from one target well</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>TargetWell</Identifier>
            <DisplayName>Target Well</DisplayName>
            <Description>Address of the target well on the plate which the reader will try to find, reach
                and will try to read the well data.
            </Description>
            <DataType>
                <DataTypeIdentifier>WellAddress</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Response>
            <Identifier>WellOpticalDensity</Identifier>
            <DisplayName>Well Optical Density</DisplayName>
            <Description>Optical density of the well</Description>
            <DataType>
                <DataTypeIdentifier>OpticalDensity</DataTypeIdentifier>
            </DataType>
        </Response>
        <StandardExecutionErrors>
            <StandardExecutionErrorIdentifier>ReadInterrupted</StandardExecutionErrorIdentifier>
        </StandardExecutionErrors>
    </Command>
    <Command>
        <Identifier>AbsorbanceReadPlate</Identifier>
        <DisplayName>Absorbance Read Plate</DisplayName>
        <Description>Go through every plate well and read its result</Description>
        <Observable>Yes</Observable>
        <Response>
            <Identifier>ResultList</Identifier>
            <DisplayName>Result List Values</DisplayName>
            <Description>Result list of values of every well</Description>
            <DataType>
                <List>
                    <DataType>
                        <Structure>
                            <Element>
                                <Identifier>WellAddress</Identifier>
                                <DisplayName>WellAddress</DisplayName>
                                <Description />
                                <DataType>
                                    <DataTypeIdentifier>WellAddress</DataTypeIdentifier>
                                </DataType>
                            </Element>
                            <Element>
                                <Identifier>WellOpticalDensity</Identifier>
                                    <DisplayName>Well Optical Density</DisplayName>
                                    <Description>Optical density of the well</Description>
                                    <DataType>
                                        <DataTypeIdentifier>OpticalDensity</DataTypeIdentifier>
                                    </DataType>
                            </Element>
                        </Structure>
                    </DataType>
                </List>
            </DataType>
        </Response>
        <StandardExecutionErrors>
            <StandardExecutionErrorIdentifier>ReadInterrupted</StandardExecutionErrorIdentifier>
        </StandardExecutionErrors>
    </Command>
    <!-- Properties -->
    <Property>
        <Identifier>PlateType</Identifier>
        <DisplayName>Plate Type</DisplayName>
        <Description>The plate type for the device reader. Defines plate dimension. Number of wells in the plate.
            Support several types of plates: 6, 12, 24, 48, 96 and 384 wells.
        </Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>Integer</Basic>
                </DataType>
                <Constraints>
                    <Enumeration>
                        <Value>6</Value>
                        <Value>12</Value>
                        <Value>24</Value>
                        <Value>48</Value>
                        <Value>96</Value>
                        <Value>384</Value>
                    </Enumeration>
                </Constraints>
            </Constrained>
        </DataType>
        <Observable>No</Observable>
    </Property>
    <Property>
        <Identifier>Status</Identifier>
        <DisplayName>Reader Status</DisplayName>
        <Description>Current status of the Reader device.
            Possible values are:
            - Idle: Reader is online and ready for command execution
            - Busy: Reader is executing a command and because of that is busy and cannot execute other command
            - Unavailable: This combines Offline and Disconnected statuses which means that Reader cannot execute any command or get a property.
        </Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <Enumeration>
                        <Value>Idle</Value>
                        <Value>Busy</Value>
                        <Value>Unavailable</Value>
                    </Enumeration>
                </Constraints>
            </Constrained>
        </DataType>
        <Observable>Yes</Observable>
    </Property>
    <Property>
        <Identifier>Measurement</Identifier>
        <DisplayName>Measurement</DisplayName>
        <Description>Measurement filter for Absorbance read in nanometers.</Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>Integer</Basic>
                </DataType>
                <Constraints>
                    <Enumeration>
                        <Value>230</Value>
                        <Value>280</Value>
                        <Value>405</Value>
                        <Value>560</Value>
                        <Value>600</Value>
                    </Enumeration>
                </Constraints>
            </Constrained>
        </DataType>
        <Observable>No</Observable>
    </Property>
    <!-- DataTypeDefinitions -->
    <DataTypeDefinition>
        <Identifier>WellAddress</Identifier>
        <DisplayName>Well Address</DisplayName>
        <Description>Well address on the plate which the reader will try to find, reach and will try to read the well data.
            The plate is like a matrix of wells and every well has addess which is unique and consists of two parts:
            1. First part is a letter from A to Z and shows the well row of the matrix
            2. Second part is a positive number 1, 2, 3, ... which shows the column of the plate matrix
            Example: A1, A2, ..., B1, B2, ...
            This property defines the first part of the well address.
        </Description>
        <DataType>
            <Structure>
                <Element>
                    <Identifier>Row</Identifier>
                    <DisplayName>Row</DisplayName>
                    <Description>Row of the well address A, B, C, ...</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>String</Basic>
                            </DataType>
                            <Constraints>
                                <Length>1</Length>
                                <Pattern>[A-Z]</Pattern>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Column</Identifier>
                    <DisplayName>Column</DisplayName>
                    <Description>Column of the well address 1, 2, 3, ...</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Integer</Basic>
                            </DataType>
                            <Constraints>
                                <Pattern>[0-9]</Pattern>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
            </Structure>
        </DataType>
    </DataTypeDefinition>
    <DataTypeDefinition>
        <Identifier>OpticalDensity</Identifier>
        <DisplayName>Optical Density</DisplayName>
        <Description>
            Measurement of the optical density in fractional number range from 0.000 to 5.000.
            It is dimensionless.
        </Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>Real</Basic>
                </DataType>
                <Constraints>
                    <Pattern>[0-9]{1}\.[0-9]{3}</Pattern>
                    <MinimalInclusive>0.000</MinimalInclusive>
                    <MaximalInclusive>5.000</MaximalInclusive>
                </Constraints>
            </Constrained>
        </DataType>
    </DataTypeDefinition>
    <!-- Command Execution Errors -->
    <StandardExecutionError>
        <Identifier>ReadInterrupted</Identifier>
        <DisplayName>Read Interrupted</DisplayName>
        <Description>Reading the well was impossible or interrupted</Description>
    </StandardExecutionError>
</Feature>