<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Normative" Originator="org.silastandard" Category="core"
        xmlns="http://www.sila-standard.org" 
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
        xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
    <Identifier>SiLAService</Identifier>
    <DisplayName>SiLA Service</DisplayName>
    <Description>
        The Feature each SiLA Server MUST implement. It is the entry point to a SiLA Server and helps to discover the Features it implements.
    </Description>

    <!-- Commands -->
    <Command>
        <Identifier>GetFeatureDefinition</Identifier>
        <DisplayName>Get Feature Definition</DisplayName>
        <Description>Get all details on one Feature through the fully qualified Feature identifier.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>FeatureIdentifier</Identifier>
            <DisplayName>Feature Identifier</DisplayName>
            <Description>The fully qualified Feature identifier for which the Feature description should be retrieved.</Description>
            <DataType>
                <DataTypeIdentifier>FeatureIdentifier</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Response>
            <Identifier>FeatureDefinition</Identifier>
            <DisplayName>Feature Definition</DisplayName>
            <Description>The Feature definition in XML format.</Description>
            <DataType>
                <DataTypeIdentifier>FeatureDefinition</DataTypeIdentifier>
            </DataType>
        </Response>
        <DefinedExecutionErrors>
            <Identifier>UnimplementedFeature</Identifier>
        </DefinedExecutionErrors>
    </Command>
    <Command>
        <Identifier>SetServerName</Identifier>
        <DisplayName>Set Server Name</DisplayName>
        <Description>Sets a human readable name to the Server Name property.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>ServerName</Identifier>
            <DisplayName>Server Name</DisplayName>
            <Description>The human readable name to assign to the SiLA Server.</Description>
            <DataType>
                <Constrained>
                    <DataType>
                        <Basic>String</Basic>
                    </DataType>
                    <Constraints>
                        <MaximalLength>255</MaximalLength>
                    </Constraints>
                </Constrained>
            </DataType>
        </Parameter>
    </Command>
    <DefinedExecutionError>
        <Identifier>UnimplementedFeature</Identifier>
        <DisplayName>Unimplemented Feature</DisplayName>
        <Description>The Feature specified by the given Feature identifier is not implemented by the server.</Description>
    </DefinedExecutionError>
    <!-- Properties -->
    <Property>
        <Identifier>ServerName</Identifier>
        <DisplayName>Server Name</DisplayName>
        <Description>Human readable name of the SiLA Server. The name can be set using the 'Set Server Name' command.</Description>
        <Observable>No</Observable>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <MaximalLength>255</MaximalLength>
                </Constraints>
            </Constrained>
        </DataType>
    </Property>
    <Property>
        <Identifier>ServerType</Identifier>
        <DisplayName>Server Type</DisplayName>
        <Description>The type of server this is. Is specified by the implementer of the server and not unique.</Description>
        <Observable>No</Observable>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <Pattern>[A-Z][a-zA-Z0-9]*</Pattern>
                    <MaximalLength>255</MaximalLength>
                </Constraints>
            </Constrained>
        </DataType>
    </Property>
    <Property>
        <Identifier>ServerUUID</Identifier>
        <DisplayName>Server UUID</DisplayName>
        <Description>Globally unique identifier that identifies a SiLA Server. The Server UUID MUST be generated once and always remain the same.
        </Description>
        <Observable>No</Observable>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <Length>36</Length>
                    <Pattern>[0-9a-f]{8}\-[0-9a-f]{4}\-[0-9a-f]{4}\-[0-9a-f]{4}\-[0-9a-f]{12}</Pattern>
                </Constraints>
            </Constrained>
        </DataType>
    </Property>
    <Property>
        <Identifier>ServerDescription</Identifier>
        <DisplayName>Server Description</DisplayName>
        <Description>Description of the SiLA Server.</Description>
        <Observable>No</Observable>
        <DataType>
            <Basic>String</Basic>
        </DataType>
    </Property>
    <Property>
        <Identifier>ServerVersion</Identifier>
        <DisplayName>Server Version</DisplayName>
        <Description>
            Returns the version of the SiLA Server. A "Major" and a "Minor" version number (e.g. 1.0) MUST be provided,
            a Patch version number MAY be provided. Optionally, an arbitrary text, separated by an underscore MAY be appended,
            e.g. “3.19.373_mighty_lab_devices”
        </Description>
        <Observable>No</Observable>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <Pattern>(0|[1-9][0-9]*)\.(0|[1-9][0-9]*)(\.(0|[1-9][0-9]*))?(_[_a-zA-Z0-9]+)?</Pattern>
                </Constraints>
            </Constrained>
        </DataType>
    </Property>
    <Property>
        <Identifier>ServerVendorURL</Identifier>
        <DisplayName>Server Vendor URL</DisplayName>
        <Description>
            Returns the URL to the website of the vendor or the website
            of the product of this SiLA Server.
        </Description>
        <Observable>No</Observable>
        <DataType>
            <DataTypeIdentifier>URL</DataTypeIdentifier>
        </DataType>
    </Property>
    <Property>
        <Identifier>ImplementedFeatures</Identifier>
        <DisplayName>Implemented Features</DisplayName>
        <Description>Returns a list of fully qualified Feature identifiers of all implemented Features of this SiLA Server.</Description>
        <Observable>No</Observable>
        <DataType>
            <List>
                <DataType>
                    <DataTypeIdentifier>FeatureIdentifier</DataTypeIdentifier>
                </DataType>
            </List>
        </DataType>
    </Property>
    <DataTypeDefinition>
        <Identifier>FeatureIdentifier</Identifier>
        <DisplayName>Feature Identifier</DisplayName>
        <Description>A fully qualified Feature identifier.</Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <MaximalLength>2048</MaximalLength>
                    <FullyQualifiedIdentifier>FeatureIdentifier</FullyQualifiedIdentifier>
                </Constraints>
            </Constrained>
        </DataType>
    </DataTypeDefinition>
    <DataTypeDefinition>
        <Identifier>FeatureDefinition</Identifier>
        <DisplayName>Feature Definition</DisplayName>
        <Description>The content of a Feature definition conforming with the according XML schema.</Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <Schema>
                        <Type>Xml</Type>
                        <Url>https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd</Url>
                    </Schema>
                </Constraints>
            </Constrained>
        </DataType>
    </DataTypeDefinition>
    <DataTypeDefinition>
        <Identifier>URL</Identifier>
        <DisplayName>URL</DisplayName>
        <Description>Uniform Resource Locator as defined in RFC 1738.</Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <Pattern>https?://.+</Pattern>
                </Constraints>
            </Constrained>
        </DataType>
    </DataTypeDefinition>
</Feature>