<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Verified" Originator="org.silastandard" Category="core.commands"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
    <Identifier>ParameterConstraintsProvider</Identifier>
    <DisplayName>Parameter Constraints Provider</DisplayName>
    <Description>
        Allows a server to apply constraints on specific command parameters after design time. It is recommended to specify
        the constraints in the Feature Definitions whenever possible.

        The constraints given by this Feature act as a logical AND to any constraints already defined in the Feature Definition.
        As an example: A constrained type has a Pattern Constraint, then the ParameterConstraintsProvider specifies an additional
        Pattern Constraint - in this case the underlying SiLA Data Type has to follow BOTH Patterns defined.

        The constrained parameters can be retrieved by reading and subscribing to the dynamic property 'ParametersConstraints'.

        Example use-case: Loading and setting the positions a mobile robot can move to at runtime.
    </Description>
    <Property>
        <Identifier>ParametersConstraints</Identifier>
        <DisplayName>Parameters Constraints</DisplayName>
        <Description>Parameter Constraints that constrain any specified parameters within this structure.</Description>
        <Observable>Yes</Observable>
        <DataType>
            <List>
                <DataType>
                    <Structure>
                        <Element>
                            <Identifier>CommandParameterIdentifier</Identifier>
                            <DisplayName>Command Parameter Identifier</DisplayName>
                            <Description>The fully qualified identifier of a constrained parameter.</Description>
                            <DataType>
                                <Constrained>
                                    <DataType>
                                        <Basic>String</Basic>
                                    </DataType>
                                    <Constraints>
                                        <FullyQualifiedIdentifier>CommandParameterIdentifier</FullyQualifiedIdentifier>
                                    </Constraints>
                                </Constrained>
                            </DataType>
                        </Element>
                        <Element>
                            <Identifier>Constraints</Identifier>
                            <DisplayName>Constraints</DisplayName>
                            <Description>The constraints to apply on the parameter.</Description>
                            <DataType>
                                <Constrained>
                                    <DataType>
                                        <Basic>String</Basic>
                                    </DataType>
                                    <Constraints>
                                        <Schema>
                                            <Type>Xml</Type>
                                            <Url>https://gitlab.com/SiLA2/sila_base/raw/master/schema/Constraints.xsd</Url>
                                        </Schema>
                                    </Constraints>
                                </Constrained>
                            </DataType>
                        </Element>
                    </Structure>
                </DataType>
            </List>
        </DataType>
    </Property>
</Feature>